PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = IPIP
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Routines
  Routine trial
    TextComponent item
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Item
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    TextComponent msgContinue
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Any text

        including line breaks
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 5
      labels = very inaccurate, very accurate
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent scoring
      Code Type = Auto->JS
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      End Routine:
        if Scoring == '+':
            thisExp.addData('score',rating.getRating())
        elif Scoring == '-':
            thisExp.addData('score',6-rating.getRating())
        else:
            print("Got an unexpected scoring value: {}".format(Scoring))
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = IPIP-NEO-PI-R-120-Johnson2014.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Number', 1), ('Item', 'Worry about things.'), ('Scoring', '+'), ('Code', 'N1'), ('Facet', 'Anxiety'), ('Factor', 'Neuroticism')]),
      OrderedDict([('Number', 2), ('Item', 'Fear for the worst.'), ('Scoring', '+'), ('Code', 'N1'), ('Facet', 'Anxiety'), ('Factor', 'Neuroticism')]),
      OrderedDict([('Number', 3), ('Item', 'Am afraid of many things.'), ('Scoring', '+'), ('Code', 'N1'), ('Facet', 'Anxiety'), ('Factor', 'Neuroticism')]),
      OrderedDict([('Number', 4), ('Item', 'Get stressed out easily.'), ('Scoring', '+'), ('Code', 'N1'), ('Facet', 'Anxiety'), ('Factor', 'Neuroticism')]),
      OrderedDict([('Number', 5), ('Item', 'Get angry easily.'), ('Scoring', '+'), ('Code', 'N2'), ('Facet', 'Anger'), ('Factor', 'Neuroticism')]),
      OrderedDict([('Number', 6), ('Item', 'Get irritated easily.'), ('Scoring', '+'), ('Code', 'N2'), ('Facet', 'Anger'), ('Factor', 'Neuroticism')]),
      OrderedDict([('Number', 7), ('Item', 'Lose my temper.'), ('Scoring', '+'), ('Code', 'N2'), ('Facet', 'Anger'), ('Factor', 'Neuroticism')]),
      OrderedDict([('Number', 8), ('Item', 'Am not easily annoyed.'), ('Scoring', '-'), ('Code', 'N2'), ('Facet', 'Anger'), ('Factor', 'Neuroticism')]),
      OrderedDict([('Number', 9), ('Item', 'Often feel blue.'), ('Scoring', '+'), ('Code', 'N3'), ('Facet', 'Depression'), ('Factor', 'Neuroticism')]),
      OrderedDict([('Number', 10), ('Item', 'Dislike myself.'), ('Scoring', '+'), ('Code', 'N3'), ('Facet', 'Depression'), ('Factor', 'Neuroticism')])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
    Routine trial
  LoopTerminator trials
