PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001', 'age': '', 'gender(f/m)': '', 'group': 'A'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2.2
  Window size (pixels) = [1920, 1080]
  expName = blingual_stroop
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Routines
  Routine instructions
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello, there are some word with differents colors,
        if the word is red, please press "left"
        if the word is blue, please press "right"
        if the word is green, please press "down"
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = thanks for your participation
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  Routine trial
    TextComponent stim
      color [set every repeat] = $letterColor
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent resp
      allowedKeys = 'down','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedbak
    CodeComponent Setmsg
      Code Type = Auto->JS
      Begin Experiment:
        msg=''
        corr=[]
      Begin Routine:
        if resp.corr:
            msg = "Correct! RT=%.3f" %(resp.rt)
            msgColor = "green"
        else:
            msg = " Oops! That was wrong"
            msgColor = "red"
        corr.append(resp.corr)
        ncorr = sum(corr[-5:])
        nresps =len(corr[-5:])
        msg+="({} out of {} correct)".format(ncorr,nresps)
    TextComponent feedback_text
      color [set every repeat] = $msgColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine rest
    TextComponent rest_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = let us rest for 10s , then start the next stage
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  Routine instrus
    TextComponent instru_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
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    KeyboardComponent instru_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator block_trials loopType="TrialHandler"
    conditionsFile = GroupA.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [OrderedDict([('language', 'English'), ('instructions', 'red = ←, green = ↓, blue = →')]),
      OrderedDict([('language', 'Maori'), ('instructions', 'whero = ←, kākāriki = ↓, kikorangi = →')])]
    Routine instrus
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $language+'.xlsx'
      loopType = random
      nReps = 2
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      Routine trial
      Routine feedbak
    LoopTerminator trials
    Routine rest
  LoopTerminator block_trials
  Routine thanks
