PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001', 'age': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2020.2.2
  Window size (pixels) = [1920, 1080]
  expName = facematch
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Routines
  Routine trial
    ImageComponent faces
      color = $[-1,-1,-1]
      image [set every repeat] = $imageFile
      mask = circle
      ori [set every repeat] = $ori
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'y','n','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent left_text
      letterHeight = 0.1
      pos = (-0.5, -1)
      startVal [time (s)] = 0.0
      text = left
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    TextComponent right_text
      letterHeight = 0.1
      pos = (0.5, -1)
      startVal [time (s)] = 0.0
      text = Right
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  Routine instruction
    TextComponent instr_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        if the face is same, please press left key

        if the face is different, please press right key

        let us start it by pressing any keys
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks for your participation!
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'same/020_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/025_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/068_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/069_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/074_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/075_DV_C2.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/081_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/085_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/092_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/102_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/108_DV_C2.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/115_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/120_DV_C2.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/129_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')]),
      OrderedDict([('imageFile', 'same/136_C2_DV.jpg'), ('corrAns', 'left'), ('sameOrDiff', 'same')])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
    Routine trial
  LoopTerminator trials
  Routine thanks
