PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = heart
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Routines
  Routine trial
    ImageComponent heart
      image = redheart1.jpg
      size [set every frame] = 200+50*(sin(t*3))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    ImageComponent firework
      image = fire2.png
      size [set every frame] = 50+50*t
      startVal [time (s)] = 10
      stopVal [duration (s)] = 2
      units = pix
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Flow
  Routine trial
