PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'gender(m/f)': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = Stroop
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Routines
  Routine trial
    TextComponent stim
      color [set every repeat] = $LetterColor
      letterHeight = 0.2
      opacity = 0.5
      startVal [time (s)] = 0.5
      text [set every repeat] = $Word
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    KeyboardComponent resp
      allowedKeys = 'down','left','right','space'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions
    TextComponent instrText
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Hello, there are some word with differents colors
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    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = thanks for your participation
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  Routine feedback
    CodeComponent setMsg
      Code Type = Auto->JS
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      Begin Experiment:
        msg=''
        corr=[]
      Begin Routine:
        if resp.corr:
            msg = "Correct! RT=%.3f" %(resp.rt)
            msgColor = "green"
        else:
            msg = " Oops! That was wrong"
            msgColor = "red"
        corr.append(resp.corr)
        ncorr = sum(corr[-5:])
        nresps =len(corr[-5:])
        msg+="({} out of {} correct)".format(ncorr,nresps)
    TextComponent feedback_text
      color [set every repeat] = $msgColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('Word', 'red'), ('LetterColor', 'red'), ('CorrAns', 'left'), ('Congruent', 1)]),
      OrderedDict([('Word', 'red'), ('LetterColor', 'green'), ('CorrAns', 'down'), ('Congruent', 0)]),
      OrderedDict([('Word', 'green'), ('LetterColor', 'green'), ('CorrAns', 'down'), ('Congruent', 1)]),
      OrderedDict([('Word', 'green'), ('LetterColor', 'blue'), ('CorrAns', 'right'), ('Congruent', 0)]),
      OrderedDict([('Word', 'blue'), ('LetterColor', 'blue'), ('CorrAns', 'right'), ('Congruent', 1)]),
      OrderedDict([('Word', 'blue'), ('LetterColor', 'red'), ('CorrAns', 'left'), ('Congruent', 0)])]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thanks
