PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Visual_searching
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        y_pos = [-400,-300,-200,-100,0,100,200,300,400]
        x_pos = [-400,-300,-200,-100,0,100,200,300,400]
      Begin Routine:
        shuffle(x_pos)
        shuffle(y_pos)
    PolygonComponent target
      fillColor [set every repeat] = $target_color
      lineWidth = 0
      nVertices = 6
      ori = 30
      pos [set every repeat] = (x_pos[0],y_pos[0])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_1
      fillColor = black
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_1
      pos [set every repeat] = (x_pos[1], y_pos[1])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_2
      fillColor = black
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_2
      pos [set every repeat] = (x_pos[2], y_pos[2])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_3
      fillColor = black
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_3
      pos [set every repeat] = (x_pos[3], y_pos[3])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_4
      fillColor = black
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_4
      pos [set every repeat] = (x_pos[4], y_pos[4])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_5
      fillColor = black
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_5
      pos [set every repeat] = (x_pos[5], y_pos[5])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_6
      fillColor = black
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_6
      pos [set every repeat] = (x_pos[6], y_pos[6])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_7
      fillColor = black
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_7
      pos [set every repeat] = (x_pos[7], y_pos[7])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent distract_8
      fillColor = black
      lineWidth = 0
      nVertices = 5
      opacity [set every repeat] = opacity_8
      pos [set every repeat] = (x_pos[8], y_pos[8])
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine ITI
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = cm
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  Routine instr
    TextComponent instru_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click the hexagon as quickly as possible. press the mouse button to start.
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    MouseComponent instru_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    CodeComponent rest
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN % 5 != 0 :
            continueRoutine = False
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = search_conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('target_color', 'black'), ('opacity_1', 1), ('opacity_2', 1), ('opacity_3', 1), ('opacity_4', 1), ('opacity_5', 1), ('opacity_6', 1), ('opacity_7', 1), ('opacity_8', 1), ('n_distract', 8)]),
      OrderedDict([('target_color', 'black'), ('opacity_1', 1), ('opacity_2', 1), ('opacity_3', 1), ('opacity_4', 1), ('opacity_5', 1), ('opacity_6', 1), ('opacity_7', 1), ('opacity_8', 0), ('n_distract', 7)]),
      OrderedDict([('target_color', 'black'), ('opacity_1', 1), ('opacity_2', 1), ('opacity_3', 1), ('opacity_4', 1), ('opacity_5', 1), ('opacity_6', 1), ('opacity_7', 0), ('opacity_8', 0), ('n_distract', 6)]),
      OrderedDict([('target_color', 'black'), ('opacity_1', 1), ('opacity_2', 1), ('opacity_3', 1), ('opacity_4', 1), ('opacity_5', 1), ('opacity_6', 0), ('opacity_7', 0), ('opacity_8', 0), ('n_distract', 5)]),
      OrderedDict([('target_color', 'black'), ('opacity_1', 1), ('opacity_2', 1), ('opacity_3', 1), ('opacity_4', 1), ('opacity_5', 0), ('opacity_6', 0), ('opacity_7', 0), ('opacity_8', 0), ('n_distract', 4)]),
      OrderedDict([('target_color', 'black'), ('opacity_1', 1), ('opacity_2', 1), ('opacity_3', 1), ('opacity_4', 0), ('opacity_5', 0), ('opacity_6', 0), ('opacity_7', 0), ('opacity_8', 0), ('n_distract', 3)]),
      OrderedDict([('target_color', 'black'), ('opacity_1', 1), ('opacity_2', 1), ('opacity_3', 0), ('opacity_4', 0), ('opacity_5', 0), ('opacity_6', 0), ('opacity_7', 0), ('opacity_8', 0), ('n_distract', 2)])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
    Routine instr
    Routine ITI
    Routine trial
  LoopTerminator trials
