PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = move_words
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = When will participants get the meaning of the sentence?
      wrapWidth = 2
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    PolygonComponent mask
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every frame] = (t*0.5, 0)
      shape = regular polygon...
      size = (2, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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Flow
  Routine trial
