PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = famous_faces
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Routines
  Routine trial
    ImageComponent facetrial
      image [set every repeat] = $imageFile
      ori [set every frame] = t*180
      size [set every frame] = t*40
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instruction
    TextComponent instr_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = if you recognize the person, please press 'y', otherwise please press 'n'
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = thanks for your participantion
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = famousface_condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'face/face01.jpg'), ('corrAns', 'y')]),
      OrderedDict([('imageFile', 'face/face02.jpg'), ('corrAns', 'y')]),
      OrderedDict([('imageFile', 'face/face03.jpg'), ('corrAns', 'y')]),
      OrderedDict([('imageFile', 'face/face04.jpg'), ('corrAns', 'y')]),
      OrderedDict([('imageFile', 'face/face05.jpg'), ('corrAns', 'y')]),
      OrderedDict([('imageFile', 'face/face06.jpg'), ('corrAns', 'y')])]
    Routine trial
  LoopTerminator trials
  Routine thanks
