PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = special_cue
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Routines
  Routine trial
    PolygonComponent cue
      durationEstim = 0.2
      fillColor = $[1,1,1]
      ori [set every repeat] = cueOri
      pos = (2, 4)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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    PolygonComponent target
      fillColor [set every frame] = $(t*90,1.000,0.5)
      fillColorSpace = hsv
      lineColor = $[-1.000,0.647,-0.584]
      pos [set every repeat] = (targetX, 0)
      shape = triangle
      size = (0.5, 0.5)
      startEstim = 0.2
      startVal [frame N] = 12
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [frame N] = 12
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      units = deg
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cue_target.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('cueSide', 'right'), ('cueOri', 90), ('targetX', 7), ('corrAns', 'right'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'right'), ('cueOri', 90), ('targetX', 7), ('corrAns', 'right'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'right'), ('cueOri', 90), ('targetX', 7), ('corrAns', 'right'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'right'), ('cueOri', 90), ('targetX', 7), ('corrAns', 'right'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'right'), ('cueOri', 90), ('targetX', 7), ('corrAns', 'right'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'right'), ('cueOri', 90), ('targetX', 7), ('corrAns', 'right'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'right'), ('cueOri', 90), ('targetX', 7), ('corrAns', 'right'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'right'), ('cueOri', 90), ('targetX', 7), ('corrAns', 'right'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'left'), ('cueOri', -90), ('targetX', -7), ('corrAns', 'left'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'left'), ('cueOri', -90), ('targetX', -7), ('corrAns', 'left'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'left'), ('cueOri', -90), ('targetX', -7), ('corrAns', 'left'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'left'), ('cueOri', -90), ('targetX', -7), ('corrAns', 'left'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'left'), ('cueOri', -90), ('targetX', -7), ('corrAns', 'left'), ('Valid', 1)]),
      OrderedDict([('cueSide', 'left'), ('cueOri', -90), ('targetX', -7), ('corrAns', 'left'), ('Valid', 1)])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
    Routine ITI
    Routine trial
  LoopTerminator trials
